CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Drag and drop the Example1 folder into the File list panel.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\\\\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\\\\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load one image from the full set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Green")
    Name to assign these images:CellStain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:SegMask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:VillusNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MaskObjects:[module_num:6|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
    Select objects to be masked:VillusNuclei
    Name the masked objects:MaskedVillusNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:SegMask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:MaskedVillusNuclei
    Name the objects to be identified:VillusCytoplasm
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:20
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredVillusNuclei
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
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
MaskObjects:[module_num:8|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
    Select objects to be masked:VillusCytoplasm
    Name the masked objects:MaskedVillusCytoplasm
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:SegMask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DNA
    Name the primary objects to be identified:CryptNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MaskObjects:[module_num:10|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
    Select objects to be masked:CryptNuclei
    Name the masked objects:MaskedCryptNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:SegMask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:MaskedCryptNuclei
    Name the objects to be identified:CryptCytoplasm
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:20
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredCryptNuclei
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
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
MaskObjects:[module_num:12|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
    Select objects to be masked:CryptCytoplasm
    Name the masked objects:MaskedCryptCytoplasm
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:SegMask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:13|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
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:EdU
    Select an image to measure:CellStain
    Select objects to measure:FilteredCryptNuclei
    Select objects to measure:FilteredVillusNuclei
    Select objects to measure:MaskedCryptCytoplasm
    Select objects to measure:MaskedVillusCytoplasm

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:FilteredCryptNuclei
    Select objects to measure:FilteredVillusNuclei
    Select objects to measure:MaskedCryptCytoplasm
    Select objects to measure:MaskedVillusCytoplasm
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:SegmentationOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#666666
    Load outlines from an image or objects?:Objects
    Select objects to display:MaskedCryptCytoplasm
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    Select outline color:#666666
    Load outlines from an image or objects?:Objects
    Select objects to display:MaskedVillusCytoplasm
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    Select outline color:#0D6EFF
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredVillusNuclei
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    Select outline color:#FB0006
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredCryptNuclei

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:SegmentationOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|seg_overlay
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:MergedOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#666666
    Load outlines from an image or objects?:Objects
    Select objects to display:MaskedCryptCytoplasm
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    Select outline color:#666666
    Load outlines from an image or objects?:Objects
    Select objects to display:MaskedVillusCytoplasm
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    Select outline color:#0D6EFF
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredVillusNuclei
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    Select outline color:#0D6EFF
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredCryptNuclei

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:MergedOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mergedoverlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|merged_overlay
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#0D6EFF
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredVillusNuclei
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    Select outline color:#FB0006
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredCryptNuclei

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nucleioverlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|nuclei_overlay
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Objects
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    Select the objects to save:FilteredCryptNuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_crypt_nuc_objects
    Saved file format:png
    Output file location:Default Output Folder sub-folder|unmerged_nuc_objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Objects
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    Select the objects to save:FilteredVillusNuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_villus_nuc_objects
    Saved file format:png
    Output file location:Default Output Folder sub-folder|unmerged_nuc_objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Objects
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    Select the objects to save:MaskedCryptCytoplasm
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_crypt_cyto_objects
    Saved file format:png
    Output file location:Default Output Folder sub-folder|unmerged_cyto_objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Objects
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    Select the objects to save:MaskedVillusCytoplasm
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_villus_cyto_objects
    Saved file format:png
    Output file location:Default Output Folder sub-folder|unmerged_cyto_objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|/Volumes/Thorne_UTSW/Microscope/CAT150523_WntDRC_RKO_BMP/CP_Output
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:Metadata_Well
    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Group_Number,Image|Group_Index,Image|Width_DNA,Image|Width_EdU,Image|URL_DNA,Image|URL_EdU,Image|Series_DNA,Image|Series_EdU,Image|Frame_DNA,Image|Frame_EdU,Image|MD5Digest_DNA,Image|MD5Digest_EdU,Image|FileName_DNA,Image|FileName_EdU,Image|Scaling_DNA,Image|Scaling_EdU,Image|ModuleError_03NamesAndTypes,Image|ModuleError_04Groups,Image|ModuleError_02Metadata,Image|ModuleError_01Images,Image|ModuleError_05IdentifyPrimaryObjects,Image|PathName_DNA,Image|PathName_EdU,Image|Height_DNA,Image|Height_EdU,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_04Groups,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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
CreateBatchFiles:[module_num:26|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/awlab/projects/2015_08_gut_organoid_analysis/data
    Cluster root path:/awlab/projects/2015_08_gut_organoid_analysis/data
    Local root path:/awlab/projects/2015_08_gut_organoid_analysis/processed_data/merged_seg
    Cluster root path:/awlab/projects/2015_08_gut_organoid_analysis/processed_data/merged_seg
