CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Drag and drop the Example1 folder into the File list panel.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\\\\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\\\\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load one image from the full set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:Paneth
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Paneth
    Name the primary objects to be identified:Paneth
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Paneth
    Name the output image:SegmentationOverlay
    Outline display mode:Color
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    Width of outlines:.5
    Select outlines to display:NuclearOutlines
    Select outline color:#0D6EFF
    Load outlines from an image or objects?:Objects
    Select objects to display:Paneth

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:SegmentationOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Paneth
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|seg_overlay
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Objects
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    Select the objects to save:Paneth
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Paneth
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_paneth_objects
    Saved file format:png
    Output file location:Default Output Folder sub-folder|paneth_objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_Paneth,Image|FileName_Paneth
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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
CreateBatchFiles:[module_num:10|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/awlab/projects/2015_08_gut_organoid_analysis/data
    Cluster root path:/awlab/projects/2015_08_gut_organoid_analysis/data
